# Generated by Configurator on Mon Jul 01 13:42:01 CEST 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM16,SerialManager,COM16
Device,DHub,DemoCamera,DHub
Device,Camera,DemoCamera,DCam
Device,Dichroic,DemoCamera,DWheel
Device,Emission,DemoCamera,DWheel
Device,Excitation,DemoCamera,DWheel
Device,Objective,DemoCamera,DObjective
Device,Z,DemoCamera,DStage
Device,Path,DemoCamera,DLightPath
Device,XY,DemoCamera,DXYStage
Device,Shutter,DemoCamera,DShutter
Device,Autofocus,DemoCamera,DAutoFocus
Device,Arduino-Hub,Arduino,Arduino-Hub
Device,Arduino-Switch,Arduino,Arduino-Switch
Device,Arduino-Shutter,Arduino,Arduino-Shutter
Device,Arduino-Input,Arduino,Arduino-Input
Device,Arduino-DAC1,Arduino,Arduino-DAC1

# Pre-init settings for devices
Property,COM16,AnswerTimeout,500.0000
Property,COM16,BaudRate,57600
Property,COM16,DataBits,8
Property,COM16,DelayBetweenCharsMs,0.0000
Property,COM16,Fast USB to Serial,Disable
Property,COM16,Handshaking,Off
Property,COM16,Parity,None
Property,COM16,StopBits,1
Property,COM16,Verbose,0
Property,Arduino-Hub,Logic,Normal
Property,Arduino-Hub,Port,COM16
Property,Arduino-Input,Pin,All
Property,Arduino-Input,Pull-Up-Resistor,On
Property,Arduino-DAC1,MaxVolt,3.3000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Camera,DHub
Parent,Dichroic,DHub
Parent,Emission,DHub
Parent,Excitation,DHub
Parent,Objective,DHub
Parent,Z,DHub
Parent,Path,DHub
Parent,XY,DHub
Parent,Shutter,DHub
Parent,Autofocus,DHub
Parent,Arduino-Switch,Arduino-Hub
Parent,Arduino-Shutter,Arduino-Hub
Parent,Arduino-Input,Arduino-Hub
Parent,Arduino-DAC1,Arduino-Hub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Camera
Property,Core,Shutter,Shutter
Property,Core,Focus,Z
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Dichroic
Label,Dichroic,9,State-9
Label,Dichroic,8,State-8
Label,Dichroic,7,State-7
Label,Dichroic,6,State-6
Label,Dichroic,5,State-5
Label,Dichroic,4,State-4
Label,Dichroic,3,State-3
Label,Dichroic,2,Q585LP
Label,Dichroic,1,Q505LP
Label,Dichroic,0,400DCLP
# Emission
Label,Emission,9,State-9
Label,Emission,8,State-8
Label,Emission,7,State-7
Label,Emission,6,State-6
Label,Emission,5,State-5
Label,Emission,4,State-4
Label,Emission,3,Chroma-HQ700
Label,Emission,2,Chroma-HQ535
Label,Emission,1,Chroma-D460
Label,Emission,0,Chroma-HQ620
# Excitation
Label,Excitation,9,State-9
Label,Excitation,8,State-8
Label,Excitation,7,State-7
Label,Excitation,6,State-6
Label,Excitation,5,State-5
Label,Excitation,4,State-4
Label,Excitation,3,Chroma-HQ620
Label,Excitation,2,Chroma-HQ570
Label,Excitation,1,Chroma-HQ480
Label,Excitation,0,Chroma-D360
# Objective
Label,Objective,5,Objective-5
Label,Objective,4,Objective-4
Label,Objective,3,Nikon 20X Plan Fluor ELWD
Label,Objective,2,Objective-2
Label,Objective,1,Nikon 10X S Fluor
Label,Objective,0,Nikon 40X Plan Flueor ELWD
# Path
Label,Path,2,State-2
Label,Path,1,State-1
Label,Path,0,State-0
# Arduino-Switch
Label,Arduino-Switch,63,63
Label,Arduino-Switch,62,62
Label,Arduino-Switch,61,61
Label,Arduino-Switch,60,60
Label,Arduino-Switch,59,59
Label,Arduino-Switch,58,58
Label,Arduino-Switch,57,57
Label,Arduino-Switch,56,56
Label,Arduino-Switch,55,55
Label,Arduino-Switch,54,54
Label,Arduino-Switch,53,53
Label,Arduino-Switch,52,52
Label,Arduino-Switch,51,51
Label,Arduino-Switch,50,50
Label,Arduino-Switch,49,49
Label,Arduino-Switch,48,48
Label,Arduino-Switch,47,47
Label,Arduino-Switch,46,46
Label,Arduino-Switch,45,45
Label,Arduino-Switch,44,44
Label,Arduino-Switch,43,43
Label,Arduino-Switch,42,42
Label,Arduino-Switch,41,41
Label,Arduino-Switch,40,40
Label,Arduino-Switch,39,39
Label,Arduino-Switch,38,38
Label,Arduino-Switch,37,37
Label,Arduino-Switch,36,36
Label,Arduino-Switch,35,35
Label,Arduino-Switch,34,34
Label,Arduino-Switch,33,33
Label,Arduino-Switch,32,32
Label,Arduino-Switch,31,31
Label,Arduino-Switch,30,30
Label,Arduino-Switch,29,29
Label,Arduino-Switch,28,28
Label,Arduino-Switch,27,27
Label,Arduino-Switch,26,26
Label,Arduino-Switch,25,25
Label,Arduino-Switch,24,24
Label,Arduino-Switch,23,23
Label,Arduino-Switch,22,22
Label,Arduino-Switch,21,21
Label,Arduino-Switch,20,20
Label,Arduino-Switch,19,19
Label,Arduino-Switch,18,18
Label,Arduino-Switch,17,17
Label,Arduino-Switch,16,16
Label,Arduino-Switch,15,15
Label,Arduino-Switch,14,14
Label,Arduino-Switch,13,13
Label,Arduino-Switch,12,12
Label,Arduino-Switch,11,11
Label,Arduino-Switch,10,10
Label,Arduino-Switch,9,9
Label,Arduino-Switch,8,8
Label,Arduino-Switch,7,7
Label,Arduino-Switch,6,6
Label,Arduino-Switch,5,5
Label,Arduino-Switch,4,4
Label,Arduino-Switch,3,3
Label,Arduino-Switch,2,2
Label,Arduino-Switch,1,1
Label,Arduino-Switch,0,0

# Configuration presets
# Group: Camera
# Preset: MedRes
ConfigGroup,Camera,MedRes,Camera,Binning,2
ConfigGroup,Camera,MedRes,Camera,BitDepth,10

# Preset: HighRes
ConfigGroup,Camera,HighRes,Camera,Binning,1
ConfigGroup,Camera,HighRes,Camera,BitDepth,12

# Preset: LowRes
ConfigGroup,Camera,LowRes,Camera,Binning,4
ConfigGroup,Camera,LowRes,Camera,BitDepth,8


# Group: Objective
# Preset: 20X
ConfigGroup,Objective,20X,Objective,State,3

# Preset: 40X
ConfigGroup,Objective,40X,Objective,State,0

# Preset: 10X
ConfigGroup,Objective,10X,Objective,State,1


# Group: Channel
# Preset: FITC
ConfigGroup,Channel,FITC,Dichroic,Label,Q505LP
ConfigGroup,Channel,FITC,Emission,Label,Chroma-HQ535
ConfigGroup,Channel,FITC,Excitation,Label,Chroma-HQ480

# Preset: Rhodamine
ConfigGroup,Channel,Rhodamine,Dichroic,Label,Q585LP
ConfigGroup,Channel,Rhodamine,Emission,Label,Chroma-HQ700
ConfigGroup,Channel,Rhodamine,Excitation,Label,Chroma-HQ570

# Preset: DAPI
ConfigGroup,Channel,DAPI,Dichroic,Label,400DCLP
ConfigGroup,Channel,DAPI,Emission,Label,Chroma-HQ620
ConfigGroup,Channel,DAPI,Excitation,Label,Chroma-D360

# Preset: Cy5
ConfigGroup,Channel,Cy5,Dichroic,Label,400DCLP
ConfigGroup,Channel,Cy5,Emission,Label,Chroma-HQ700
ConfigGroup,Channel,Cy5,Excitation,Label,Chroma-HQ570


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Camera,BitDepth,16
ConfigGroup,System,Startup,Camera,ScanMode,1
ConfigGroup,System,Startup,Objective,Label,Nikon 10X S Fluor
ConfigGroup,System,Startup,Camera,Binning,1


# Group: LightPath
# Preset: Camera-left
ConfigGroup,LightPath,Camera-left,Path,State,1

# Preset: Eyepiece
ConfigGroup,LightPath,Eyepiece,Path,State,0

# Preset: Camera-right
ConfigGroup,LightPath,Camera-right,Path,State,2


# Group: Arduino
# Preset: RED
ConfigGroup,Arduino,RED,Arduino-Switch,Blank On,Low
ConfigGroup,Arduino,RED,Arduino-Switch,Blanking Mode,On
ConfigGroup,Arduino,RED,Arduino-Switch,Label,1
ConfigGroup,Arduino,RED,Arduino-Switch,Sequence,On
ConfigGroup,Arduino,RED,Arduino-Switch,State,1
ConfigGroup,Arduino,RED,Arduino-Shutter,OnOff,1
ConfigGroup,Arduino,RED,Arduino-DAC1,Volts,0.0000

# Preset: BLUE
ConfigGroup,Arduino,BLUE,Arduino-Switch,Blank On,Low
ConfigGroup,Arduino,BLUE,Arduino-Switch,Blanking Mode,On
ConfigGroup,Arduino,BLUE,Arduino-Switch,Label,4
ConfigGroup,Arduino,BLUE,Arduino-Switch,Sequence,On
ConfigGroup,Arduino,BLUE,Arduino-Switch,State,4
ConfigGroup,Arduino,BLUE,Arduino-Shutter,OnOff,1
ConfigGroup,Arduino,BLUE,Arduino-DAC1,Volts,0.0000

# Preset: GREEN
ConfigGroup,Arduino,GREEN,Arduino-Switch,Blank On,Low
ConfigGroup,Arduino,GREEN,Arduino-Switch,Blanking Mode,On
ConfigGroup,Arduino,GREEN,Arduino-Switch,Label,2
ConfigGroup,Arduino,GREEN,Arduino-Switch,Sequence,On
ConfigGroup,Arduino,GREEN,Arduino-Switch,State,2
ConfigGroup,Arduino,GREEN,Arduino-Shutter,OnOff,1
ConfigGroup,Arduino,GREEN,Arduino-DAC1,Volts,0.0000



# PixelSize settings
# Resolution preset: Res20x
ConfigPixelSize,Res20x,Objective,Label,Nikon 20X Plan Fluor ELWD
PixelSize_um,Res20x,0.5

# Resolution preset: Res40x
ConfigPixelSize,Res40x,Objective,Label,Nikon 40X Plan Flueor ELWD
PixelSize_um,Res40x,0.25

# Resolution preset: Res10x
ConfigPixelSize,Res10x,Objective,Label,Nikon 10X S Fluor
PixelSize_um,Res10x,1.0


